PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = scratch
  keyboardBackend = Pyglet
  measureFrameRate = False
  runMode = 1
  rush = True
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Routines
  Routine trial
    RoutineSettingsComponent trial
      stopVal [duration (s)] = 15
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    TextboxComponent stim_words
      autoLog = False
      bold = False
      editable = False
      letterHeight = 0.08
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0
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      text [set every repeat]:
        $word1 + "\n" + word2 + "\n" + word3
        #+ "\n\n\n\n\nTrial " + str(currentLoop.thisN + 1) + " of " + str(currentLoop.nTotal)
    ProgressComponent prog
      anchor = center-left
      borderColor = white
      color = -1.0000, -1.0000, 0.0902
      fillColor = None
      lineWidth = 4
      pos = (-.250, -0.2)
      progress [set every frame] = 1.0 - (t / 15.0)
      saveStartStop = False
      size = (0.5, 0.05)
      startVal [time (s)] = 0
      units = height
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    KeyboardComponent key_resp
      allowedKeys = 'space','a','b','c','d','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z',
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.001
      store = all keys
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  Routine answer
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    CodeComponent code_2
      Code Type = Auto->JS
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      Each Frame:
        if '\n' in textbox_3.text:
            continueRoutine = False
      End Routine:
        # Normalize both strings (lowercase, stripped of whitespace)
        response = textbox_3.text.strip().lower()
        correct_answer = solution.strip().lower()

        # Compare and store result
        correct = int(response == correct_answer)

        # Save it to the data file
        thisExp.addData('correct', correct)
        #thisExp.addData('cleaned_response', response)
    TextboxComponent textbox_3
      autoLog = False
      bold = False
      borderColor = 1.0000, 1.0000, 1.0000
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (0.5, 0.07)
      startVal [time (s)] = -15
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    ProgressComponent prog_2
      anchor = center-left
      borderColor = white
      color = -1.0000, -1.0000, 0.0902
      fillColor = None
      lineWidth = 4
      pos = (-.250, -0.2)
      progress [set every frame] = 1.0 - (t / 7.0)
      size = (0.5, 0.05)
      startVal [time (s)] = 0
      units = height
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  Routine fixation
    RoutineSettingsComponent fixation
      saveStartStop = False
      stopVal [duration (s)] = 1
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  Routine introduction
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    KeyboardComponent into_keyboard
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
      syncScreenRefresh = False
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    ImageComponent welcome_image
      image = welcome_message.PNG
      saveStartStop = False
      size = (1.5,0.9)
      startVal [time (s)] = 0.0
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  Routine real_test
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Flow
  Routine introduction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = practice_trials.xlsx
    loopType = sequential
    nReps = 5
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    conditions:
      [{'word1': 'test', 'word2': 'test', 'word3': 'test', 'solution': 'test'},
      {'word1': 'test', 'word2': 'test', 'word3': 'test', 'solution': 'test'},
      {'word1': 'test', 'word2': 'test', 'word3': 'test', 'solution': 'test'}]
    Routine fixation
    Routine trial
    Routine answer
  LoopTerminator trials
  Routine real_test
  LoopInitiator experiment loopType="TrialHandler"
    conditionsFile = CRA_conditions.xlsx
    loopType = sequential
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    conditions:
      [{'word1': 'test', 'word2': 'test', 'word3': 'test', 'solution': 'test'},
      {'word1': 'test', 'word2': 'test', 'word3': 'test', 'solution': 'test'},
      {'word1': 'test', 'word2': 'test', 'word3': 'test', 'solution': 'test'},
      {'word1': 'test', 'word2': 'test', 'word3': 'test', 'solution': 'test'},
      {'word1': 'test', 'word2': 'test', 'word3': 'test', 'solution': 'test'},
      {'word1': 'test', 'word2': 'test', 'word3': 'test', 'solution': 'test'},
      {'word1': 'test', 'word2': 'test', 'word3': 'test', 'solution': 'test'},
      {'word1': 'test', 'word2': 'test', 'word3': 'test', 'solution': 'test'},
      {'word1': 'test', 'word2': 'test', 'word3': 'test', 'solution': 'test'},
      {'word1': 'test', 'word2': 'test', 'word3': 'test', 'solution': 'test'},
      {'word1': 'test', 'word2': 'test', 'word3': 'test', 'solution': 'test'},
      {'word1': 'test', 'word2': 'test', 'word3': 'test', 'solution': 'test'},
      {'word1': 'test', 'word2': 'test', 'word3': 'test', 'solution': 'test'},
      {'word1': 'test', 'word2': 'test', 'word3': 'test', 'solution': 'test'},
      {'word1': 'test', 'word2': 'test', 'word3': 'test', 'solution': 'test'},
      {'word1': 'test', 'word2': 'test', 'word3': 'test', 'solution': 'test'},
      {'word1': 'test', 'word2': 'test', 'word3': 'test', 'solution': 'test'},
      {'word1': 'test', 'word2': 'test', 'word3': 'test', 'solution': 'test'},
      {'word1': 'test', 'word2': 'test', 'word3': 'test', 'solution': 'test'},
      {'word1': 'test', 'word2': 'test', 'word3': 'test', 'solution': 'test'},
      {'word1': 'test', 'word2': 'test', 'word3': 'test', 'solution': 'test'}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
    Routine fixation
    Routine trial
    Routine answer
  LoopTerminator experiment
