PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Show mouse = True
  Units = height
  Window size (pixels) = [1920, 1080]
  color = -1.0000, -1.0000, -1.0000
  expName = main
  keyboardBackend = ioHub
  measureFrameRate = False
  runMode = 0
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Routines
  Routine trial
    RoutineSettingsComponent trial
      saveStartStop = False
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    TextboxComponent textbox
      bold = False
      disabled = True
      editable = False
      letterHeight = 0.035
      lineSpacing = .8
      overflow = scroll
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Compound Remote Associates Test (CRAT)

        In this task, you will be presented with a set of three words. Your goal is to generate a fourth word that forms a common compound word or phrase with each of the three stimulus words.

        You will first see a fixation cross (+).

        Then, three stimulus words will appear for 15 seconds.

        During that time, try to think of a word that connects to all three.

        When you're ready, press ANY KEY or click "I Got It" to enter your answer.

        You'll have 7 seconds to type your solution.

        If you do nothing during the response window, the task moves on automatically.

        You will begin with a few practice problems.

        Click Anywhere to continue.
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 2
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
      syncScreenRefresh = False
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    ImageComponent welcome_image
      image = welcome_message.PNG
      saveStartStop = False
      size = (1.5,0.9)
      startVal [time (s)] = 0.0
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  Routine notice2
    RoutineSettingsComponent notice2
      saveStartStop = False
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    TextboxComponent Procedure
      autoLog = False
      bold = False
      disabled = True
      editable = False
      letterHeight = 0.035
      lineSpacing = .8
      overflow = scroll
      saveStartStop = False
      size = (1.2, 0.8)
      startVal [time (s)] = 0.0
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      text:
        Task Procedure

        1. Fixate on the cross at the center.
        2. Three words will appear for 15 seconds (e.g., pine, crab, sauce).
        3. Think of a connecting word (e.g., apple yields pineapple, crabapple, applesauce).
        4. When ready, press ANY KEY or click "I Got It."
        5. Type your answer within 7 seconds.
        6. Press Enter or click "Submit."

        Click Next to begin practice.
    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 2
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
      syncScreenRefresh = False
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    ImageComponent procedure_image
      image = task_procedure.PNG
      saveStartStop = False
      size = (1.8,0.9)
      startVal [time (s)] = 0.0
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  Routine Trial
    RoutineSettingsComponent Trial
      saveStartStop = False
      stopVal [duration (s)] = 15
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    TextboxComponent textbox_2
      bold = False
      editable = False
      letterHeight = 0.08
      size = (0.5, 0.5)
      startVal [time (s)] = 0
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      text [set every repeat]:
        $word1 + "\n" + word2 + "\n" + word3
        #+ "\n\n\n\n\nTrial " + str(currentLoop.thisN + 1) + " of " + str(currentLoop.nTotal)
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # First check which loop is currently running
        # If we're still in the first loop
        if trials.thisN < trials.nTotal:
            currentLoop = trials
        # Else if first loop has completed, switch to the second loop
        elif trials_2.thisN < trials_2.nTotal:
            currentLoop = trials_2
      Each Frame:
        # Progress goes from 1.0 → 0.0 over 15 seconds
        progress = 1.0 - (t / 15.0)

        # Ensure progress doesn’t go negative
        progress = max(0, progress)

        # Update color based on time left
        if t < 5:
            bar_color = 'green'
        elif t < 10:
            bar_color = 'yellow'
        else:
            bar_color = 'red'

        # Compute width based on progress
        bar_width = progress  # scale from 1.0 (full) to 0.0 (empty)
      End Routine:
        last_key = ''
        if key_resp.keys:
            k = key_resp.keys[-1]
            if k.isalpha():
                last_key = k
    ProgressComponent prog
      anchor = center-left
      borderColor = white
      color = -1.0000, -1.0000, 0.0902
      fillColor = None
      lineWidth = 4
      pos = (-.250, -0.2)
      progress [set every frame] = bar_width
      saveStartStop = False
      size = (0.5, 0.05)
      startVal [time (s)] = 0
      units = height
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    MouseComponent mouse_3
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0
      timeRelativeTo = experiment
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    KeyboardComponent key_resp
      allowedKeys = 'space','a','b','c','d','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z',
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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  Routine Answer_screen
    RoutineSettingsComponent Answer_screen
      skipIf = not key_resp.keys
      stopVal [duration (s)] = 7
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        ## In Begin Routine Tab for Answer
        ## Breakpoint here
        if last_key:
            textbox_3.text = last_key.lower()
      Each Frame:
        if '\n' in textbox_3.text:
            continueRoutine = False
      End Routine:
        # Normalize both strings (lowercase, stripped of whitespace)
        response = textbox_3.text.strip().lower()
        correct_answer = solution.strip().lower()

        # Compare and store result
        correct = int(response == correct_answer)

        # Save it to the data file
        thisExp.addData('correct', correct)
        #thisExp.addData('cleaned_response', response)
        #
    TextboxComponent textbox_3
      autoLog = False
      bold = False
      borderColor = 1.0000, 1.0000, 1.0000
      editable = True
      letterHeight = 0.05
      placeholder [set every repeat] = Type here...
      saveStartStop = False
      size = (0.5, 0.07)
      startVal [time (s)] = 0.0
      text [set every repeat] = $last_key.lower()
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    ProgressComponent prog_2
      anchor = center-left
      borderColor = white
      color = -1.0000, -1.0000, 0.0902
      fillColor = None
      lineWidth = 4
      pos = (-.250, -0.2)
      progress [set every frame] = 1.0 - (t / 7.0)
      size = (0.5, 0.05)
      startVal [time (s)] = 0
      units = height
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    KeyboardComponent key_resp_2
      allowedKeys = 'enter','return'
      disabled = True
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine fixation
    RoutineSettingsComponent fixation
      saveStartStop = False
      stopVal [duration (s)] = 1
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    TextComponent text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .75
      text = +
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    MouseComponent mouse_6
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0
      timeRelativeTo = experiment
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  Routine Real_test
    RoutineSettingsComponent Real_test
      saveStartStop = False
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    TextboxComponent Real_test_message
      autoLog = False
      bold = False
      editable = False
      letterHeight = 0.035
      lineSpacing = .8
      overflow = scroll
      saveStartStop = False
      size = (1.2, 0.8)
      startVal [time (s)] = 0.0
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      text:
        Ready for the real thing?

        1. Fixate on the cross at the center.
        2. Three words will appear for 15 seconds (e.g., pine, crab, sauce).
        3. Think of a connecting word (e.g., apple yields pineapple, crabapple, applesauce).
        4. When ready, press ANY KEY or click "I Got It."
        5. Type your answer within 7 seconds.
        6. Press Enter or click "Submit."

        Click Next to begin practice.
    MouseComponent mouse_4
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 2
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    ImageComponent real_test_notice
      image = real_test_notice.PNG
      saveStartStop = False
      size = (1.8,0.9)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_6
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      syncScreenRefresh = False
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  Routine thanks_message
    RoutineSettingsComponent thanks_message
      saveStartStop = False
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    TextboxComponent thank_you_message
      bold = False
      editable = False
      letterHeight = 0.035
      lineSpacing = .8
      overflow = scroll
      saveStartStop = False
      size = (1.2, 0.8)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_5
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 30
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 30
      syncScreenRefresh = False
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    ImageComponent thanks_messge
      image = thank_you.PNG
      saveStartStop = False
      size = (2.1,1.0)
      startVal [time (s)] = 0.0
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Flow
  Routine trial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = practice_trials.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'word1': 'cottage', 'word2': 'swiss', 'word3': 'cake', 'solution': 'cheese'},
      {'word1': 'cream', 'word2': 'skate', 'word3': 'water', 'solution': 'ice'},
      {'word1': 'loser', 'word2': 'throat', 'word3': 'spot', 'solution': 'sore'}]
    Routine fixation
    Routine Trial
    Routine Answer_screen
  LoopTerminator trials
  Routine Real_test
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = CRA_conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word1': 'show', 'word2': 'life', 'word3': 'row', 'solution': 'boat'},
      {'word1': 'night', 'word2': 'wrist', 'word3': 'stop', 'solution': 'watch'},
      {'word1': 'duck', 'word2': 'fold', 'word3': 'dollar', 'solution': 'bill'},
      {'word1': 'rocking', 'word2': 'wheel', 'word3': 'high', 'solution': 'chair'},
      {'word1': 'dew', 'word2': 'comb', 'word3': 'bee', 'solution': 'honey'},
      {'word1': 'fountain', 'word2': 'baking', 'word3': 'pop', 'solution': 'soda'},
      {'word1': 'preserve', 'word2': 'ranger', 'word3': 'tropical', 'solution': 'forest'},
      {'word1': 'aid', 'word2': 'rubber', 'word3': 'wagon', 'solution': 'band'},
      {'word1': 'flake', 'word2': 'mobile', 'word3': 'cone', 'solution': 'snow'},
      {'word1': 'cracker', 'word2': 'fly', 'word3': 'fighter', 'solution': 'fire'},
      {'word1': 'safety', 'word2': 'cushion', 'word3': 'point', 'solution': 'pin'},
      {'word1': 'cane', 'word2': 'daddy', 'word3': 'plum', 'solution': 'sugar'},
      {'word1': 'dream', 'word2': 'break', 'word3': 'light', 'solution': 'day'},
      {'word1': 'fish', 'word2': 'mine', 'word3': 'rush', 'solution': 'gold'},
      {'word1': 'political', 'word2': 'surprise', 'word3': 'line', 'solution': 'party'},
      {'word1': 'measure', 'word2': 'worm', 'word3': 'video', 'solution': 'tape'},
      {'word1': 'high', 'word2': 'district', 'word3': 'house', 'solution': 'school'},
      {'word1': 'sense', 'word2': 'courtesy', 'word3': 'place', 'solution': 'common'},
      {'word1': 'worm', 'word2': 'shelf', 'word3': 'end', 'solution': 'book'},
      {'word1': 'piece', 'word2': 'mind', 'word3': 'dating', 'solution': 'game'}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
    Routine fixation
    Routine Trial
    Routine Answer_screen
  LoopTerminator trials_2
  Routine thanks_message
