PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Show info dlg = False
  Show mouse = True
  Units = height
  Window size (pixels) = [1920, 1080]
  color = -1.0000, -1.0000, -1.0000
  consoleLoggingLevel = debug
  expName = main_v3
  keyboardBackend = ioHub
  measureFrameRate = False
  runMode = 1
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Routines
  Routine trial
    RoutineSettingsComponent trial
      saveStartStop = False
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
      syncScreenRefresh = False
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    ImageComponent welcome_image
      image = welcome_message.PNG
      saveStartStop = False
      size = (1.5,0.9)
      startVal [time (s)] = 0.0
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  Routine notice2
    RoutineSettingsComponent notice2
      saveStartStop = False
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    TextboxComponent Procedure
      autoLog = False
      bold = False
      disabled = True
      editable = False
      letterHeight = 0.035
      lineSpacing = .8
      overflow = scroll
      saveStartStop = False
      size = (1.2, 0.8)
      startVal [time (s)] = 0.0
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      text:
        Task Procedure

        1. Fixate on the cross at the center.
        2. Three words will appear for 15 seconds (e.g., pine, crab, sauce).
        3. Think of a connecting word (e.g., apple yields pineapple, crabapple, applesauce).
        4. When ready, press ANY KEY or click "I Got It."
        5. Type your answer within 7 seconds.
        6. Press Enter or click "Submit."

        Click Next to begin practice.
    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 2
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
      syncScreenRefresh = False
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    ImageComponent procedure_image
      image = task_procedure.PNG
      saveStartStop = False
      size = (1.8,0.9)
      startVal [time (s)] = 0.0
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  Routine Trial
    RoutineSettingsComponent Trial
      saveStartStop = False
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    TextboxComponent answer_input
      bold = False
      color [set every frame] = white
      editable = True
      letterHeight = 0.1
      size [set every frame] = [1,2]
      startVal [time (s)] = 0
      units = height
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import core
        answering = False
        answer_color = 'black'
        square_color = 'black'
        question_time = 15
        answer_time = 7
      Begin Routine:
        points = 0  # Initialize points for this trial
        opacity = 1
        answering = False
        square_color = 'black'
        routine_time = question_time
        if trials.thisN < trials.nTotal:
            currentLoop = trials
        # Else if first loop has completed, switch to the second loop
        elif trials_2.thisN < trials_2.nTotal:
            currentLoop = trials_2

        placeholder_text = word1 + "\n" + word2 + "\n" + word3
        timer = core.CountdownTimer(question_time)
      Each Frame:
        # Check for newline in answer input
        if '\n' in answer_input.text:
            continueRoutine = False  # Immediately end the routine
            print("Newline detected - ending routine early")

        # Get current time and calculate progress
        t = timer.getTime()
        progress = max(0, t / routine_time)  # 1.0 → 0.0

        # Set color based on current timer's thirds
        if progress < 1/3:  # Final third (red)
            bar_color = 'red'
        elif progress < 2/3:  # Middle third (yellow)
            bar_color = 'yellow'
        else:  # First third (green)
            bar_color = 'green'

        # Set width directly using progress (no max_bar_width needed)
        bar_width = progress  # Assuming your bar scales 0-1

        # Handle answer input
        if len(answer_input.text) >= 1:
            opacity = 0
            placeholder_text = ''
        #    print('set opacity', opacity)
            if not answering:
                answering = True
                timer = core.CountdownTimer(answer_time)
                routine_time = answer_time

        # End routine if time expires
        if t <= 0:
            continueRoutine = False
      End Routine:
        cleaned_answer = ''.join([c.lower() for c in answer_input.text if c.isalpha()])
        cleaned_solution = solution.lower().replace(" ", "")

        # Assign points (1 for correct, 0 for incorrect)
        if cleaned_answer == cleaned_solution:
            points = 1
        else:
            points = 0

        # Add to your data output
        thisExp.addData('points', points)
    PolygonComponent polygon
      fillColor = black
      lineColor = black
      opacity [set every frame] = opacity
      saveStartStop = False
      shape = rectangle
      size = (1.0, 1.0)
      startVal [time (s)] = 0.0
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    TextboxComponent stim_words
      bold = False
      editable = False
      letterHeight = 0.1
      opacity [set every frame] = opacity
      placeholder [set every frame] = $placeholder_text
      size [set every frame] = [1,2]
      startVal [time (s)] = 0
      text [set every frame] = $placeholder_text
      units = height
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    ProgressComponent prog
      anchor = center-left
      borderColor = white
      color [set every frame] = $bar_color
      fillColor [set every frame] = black
      lineWidth = 4
      pos = (-.250, -0.2)
      progress [set every frame] = max(0, timer.getTime()) / routine_time
      saveStartStop = False
      size = (0.5, 0.05)
      startVal [time (s)] = 0
      units = height
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  Routine Answer_screen
    RoutineSettingsComponent Answer_screen
      skipIf = not key_resp.keys
      stopVal [duration (s)] = 7
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        # Begin Routine Code Trial Section Start
        #if last_key:  # only if something was pressed
        #    key = last_key.lower()
        #
        #    # --- 1. Prevent repeating the same letter twice in a row ---
        #    if not (textbox_3.text and textbox_3.text[-1] == key):
        #        textbox_3.text += key

        # I can put this in the textbox component
        # $last_key.lower()
      Each Frame:
        if '\n' in textbox_3.text:
            continueRoutine = False

        if len(str(textbox_3.text))==2:
            if textbox_3.text[0] == textbox_3.text[1]:
                textbox_3.text= textbox_3.text[0]
      End Routine:
        ## End Routine Code Trial Section Start
        # Normalize both strings (lowercase, stripped of whitespace)
        response = textbox_3.text.strip().lower()
        correct_answer = solution.strip().lower()

        # Compare and store result
        correct = int(response == correct_answer)

        # Save it to the data file
        thisExp.addData('correct', correct)
        #thisExp.addData('cleaned_response', response)
        ## End Routine Code Trial Section End
    TextboxComponent textbox_3
      autoLog = False
      bold = False
      borderColor = 1.0000, 1.0000, 1.0000
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (0.5, 0.07)
      startVal [time (s)] = 0.0
      text [set every repeat] = $keys_pressed
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    ProgressComponent prog_2
      anchor = center-left
      borderColor = white
      color = -1.0000, -1.0000, 0.0902
      fillColor = None
      lineWidth = 4
      pos = (-.250, -0.2)
      progress [set every frame] = 1.0 - (t / 7.0)
      size = (0.5, 0.05)
      startVal [time (s)] = 0
      units = height
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  Routine fixation
    RoutineSettingsComponent fixation
      saveStartStop = False
      stopVal [duration (s)] = 1
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    TextComponent text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .75
      text = +
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  Routine Real_test
    RoutineSettingsComponent Real_test
      saveStartStop = False
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    TextboxComponent Real_test_message
      autoLog = False
      bold = False
      editable = False
      letterHeight = 0.035
      lineSpacing = .8
      overflow = scroll
      saveStartStop = False
      size = (1.2, 0.8)
      startVal [time (s)] = 0.0
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      text:
        Ready for the real thing?

        1. Fixate on the cross at the center.
        2. Three words will appear for 15 seconds (e.g., pine, crab, sauce).
        3. Think of a connecting word (e.g., apple yields pineapple, crabapple, applesauce).
        4. When ready, press ANY KEY or click "I Got It."
        5. Type your answer within 7 seconds.
        6. Press Enter or click "Submit."

        Click Next to begin practice.
    ImageComponent real_test_notice
      image = real_test_notice.PNG
      saveStartStop = False
      size = (1.8,0.9)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_6
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
      syncScreenRefresh = False
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  Routine thanks_message
    RoutineSettingsComponent thanks_message
      saveStartStop = False
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    TextboxComponent thank_you_message
      bold = False
      editable = False
      letterHeight = 0.035
      lineSpacing = .8
      overflow = scroll
      saveStartStop = False
      size = (1.2, 0.8)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_5
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 30
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 30
      syncScreenRefresh = False
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    ImageComponent thanks_messge
      image = thank_you.PNG
      saveStartStop = False
      size = (2.1,1.0)
      startVal [time (s)] = 0.0
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Flow
  Routine trial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = practice_trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('word1', 'cottage'), ('word2', 'swiss'), ('word3', 'cake'), ('solution', 'cheese')]),
      OrderedDict([('word1', 'cream'), ('word2', 'skate'), ('word3', 'water'), ('solution', 'ice')]),
      OrderedDict([('word1', 'rocking'), ('word2', 'wheel'), ('word3', 'high'), ('solution', 'horse')])]
    Routine fixation
    Routine Trial
  LoopTerminator trials
  Routine Real_test
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = CRA_conditions.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('word1', 'date'), ('word2', 'alley'), ('word3', 'fold'), ('solution', 'blind')]),
      OrderedDict([('word1', 'loser'), ('word2', 'throat'), ('word3', 'spot'), ('solution', 'sore')]),
      OrderedDict([('word1', 'fountain'), ('word2', 'baking'), ('word3', 'pop'), ('solution', 'soda')]),
      OrderedDict([('word1', 'fish'), ('word2', 'mine'), ('word3', 'rush'), ('solution', 'gold')]),
      OrderedDict([('word1', 'cracker'), ('word2', 'fly'), ('word3', 'fighter'), ('solution', 'fire')]),
      OrderedDict([('word1', 'night'), ('word2', 'wrist'), ('word3', 'stop'), ('solution', 'watch')]),
      OrderedDict([('word1', 'duck'), ('word2', 'fold'), ('word3', 'dollar'), ('solution', 'bill')]),
      OrderedDict([('word1', 'dream'), ('word2', 'break'), ('word3', 'light'), ('solution', 'day')]),
      OrderedDict([('word1', 'worm'), ('word2', 'shelf'), ('word3', 'end'), ('solution', 'book')]),
      OrderedDict([('word1', 'cane'), ('word2', 'daddy'), ('word3', 'plum'), ('solution', 'sugar')]),
      OrderedDict([('word1', 'aid'), ('word2', 'rubber'), ('word3', 'waggon'), ('solution', 'band')]),
      OrderedDict([('word1', 'flake'), ('word2', 'mobile'), ('word3', 'cone'), ('solution', 'snow')]),
      OrderedDict([('word1', 'sleeping'), ('word2', 'bean'), ('word3', 'trash'), ('solution', 'bag')]),
      OrderedDict([('word1', 'preserve'), ('word2', 'ranger'), ('word3', 'tropical'), ('solution', 'forest')]),
      OrderedDict([('word1', 'fox'), ('word2', 'man'), ('word3', 'peep'), ('solution', 'hole')])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
    Routine fixation
    Routine Trial
  LoopTerminator trials_2
  Routine thanks_message
