PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Show mouse = True
  Units = height
  Window size (pixels) = [1920, 1080]
  color = -1.0000, -1.0000, -1.0000
  expName = main
  keyboardBackend = ioHub
  measureFrameRate = False
  runMode = 1
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Routines
  Routine Trial
    RoutineSettingsComponent Trial
      saveStartStop = False
      stopVal [duration (s)] = 15
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    TextboxComponent textbox_2
      autoLog = False
      bold = False
      editable = False
      letterHeight = 0.08
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0
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      text [set every repeat]:
        $word1 + "\n" + word2 + "\n" + word3
        #+ "\n\n\n\n\nTrial " + str(currentLoop.thisN + 1) + " of " + str(currentLoop.nTotal)
    ProgressComponent prog
      anchor = center-left
      borderColor = white
      color = -1.0000, -1.0000, 0.0902
      fillColor = None
      lineWidth = 4
      pos = (-.250, -0.2)
      progress [set every frame] = 1.0 - (t / 15.0)
      saveStartStop = False
      size = (0.5, 0.05)
      startVal [time (s)] = 0
      units = height
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    KeyboardComponent key_resp
      allowedKeys = 'space','a','b','c','d','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z',
      forceEndRoutine = True
      saveStartStop = False
      store = all keys
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  Routine Answer_screen
    RoutineSettingsComponent Answer_screen
      skipIf = not key_resp.keys
      stopVal [duration (s)] = 7
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        ## In Begin Routine Tab for Answer
        ## Breakpoint here
      Each Frame:
        if '\n' in textbox_3.text:
            continueRoutine = False
      End Routine:
        # Normalize both strings (lowercase, stripped of whitespace)
        response = textbox_3.text.strip().lower()
        correct_answer = solution.strip().lower()

        # Compare and store result
        correct = int(response == correct_answer)

        # Save it to the data file
        thisExp.addData('correct', correct)
        #thisExp.addData('cleaned_response', response)
    TextboxComponent textbox_3
      autoLog = False
      bold = False
      borderColor = 1.0000, 1.0000, 1.0000
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (0.5, 0.07)
      startVal [time (s)] = 0
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    ProgressComponent prog_2
      anchor = center-left
      borderColor = white
      color = -1.0000, -1.0000, 0.0902
      fillColor = None
      lineWidth = 4
      pos = (-.250, -0.2)
      progress [set every frame] = 1.0 - (t / 7.0)
      size = (0.5, 0.05)
      startVal [time (s)] = 0
      units = height
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = practice_trials.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'word1': 'cottage', 'word2': 'swiss', 'word3': 'cake', 'solution': 'cheese'},
      {'word1': 'cream', 'word2': 'skate', 'word3': 'water', 'solution': 'ice'},
      {'word1': 'loser', 'word2': 'throat', 'word3': 'spot', 'solution': 'sore'}]
    Routine Trial
    Routine Answer_screen
  LoopTerminator trials
